PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = remlure_localizer
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome
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    CodeComponent init_code
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
        import numpy as np
        from itertools import permutations
        import os

        participant_number = expInfo['participant']

        # set directory path
        try:
            _thisDir = os.path.dirname(os.path.abspath(__file__))
        except NameError:
            print("__file__ does not exist")
            _thisDir = os.getcwd()

        # create a subject specific folder to save all lists
        list_foldername = os.path.join(_thisDir, "subject lists", f"sub-{participant_number}")

        phase_subFolder = "localizer"

        # Create the subject folder if it doesn't exist
        if not os.path.exists(list_foldername):
            os.makedirs(list_foldername)
            print(f"List folder successfully created for sub-{participant_number}")
        else:
            print(f"List folder already exists for sub-{participant_number}...")

        # Create each phase subfolder within the subject's folder
        phase_folder_path = os.path.join(list_foldername, phase_subFolder)
        # Create the phase folder
        if not os.path.exists(phase_folder_path):
            os.makedirs(phase_folder_path)
            print(f"Created phase folder: {phase_subFolder}")
        else:
            print(f"Phase folder '{phase_subFolder}' already exists...")

        # Import stimuli csvs
        faces_df = pd.read_csv("stimuli/csvs/main_task/faces_mainTask.csv", header=None)
        places_df = pd.read_csv("stimuli/csvs/main_task/places_mainTask.csv", header=None)
        fruits_df = pd.read_csv("stimuli/csvs/main_task/fruits_mainTask.csv", header=None)
        # Define some experiment variables
        categories = ["faces", "places", "fruits"]
        stim_dict = {"faces": faces_df[0].tolist(),
                     "places": places_df[0].tolist(),
                     "fruits": fruits_df[0].tolist()}
        num_runs = 3
        run_len = 60
        total_runs = num_runs * run_len
        perms = np.random.permutation(list(permutations(categories, 3)))

        # Initiate dataframe to store stims
        locstim_df = pd.DataFrame()
        for n in range(num_runs):
            run_list = []
            for cat in perms[n]:
                run_list += np.random.permutation(stim_dict[cat]).tolist()
            run_df = pd.DataFrame(run_list, columns=["img"])
            run_df["run"] = n + 1
            locstim_df = pd.concat([locstim_df, run_df], ignore_index=True)

        # add trial num
        locstim_df["trial_num"] = [i for i in range(1, locstim_df.shape[0] + 1)]
        # add rest trigger
        locstim_df["rest_trigger"] = [int(not (i % run_len)) if i < total_runs else 0 for i in range(1, stims_df.shape[0] + 1)]

        # Add jitter, randomized within run
        jitter = []
        for i in range(num_runs):
            jitter += np.random.permutation([3, 4, 5] * (run_len // 3)).tolist()
        locstim_df["jitter"] = jitter

        locstim_df_infile = f"{phase_folder_path}/loc_stim_list.csv"
        # Save to maintask folder
        locstim_df.to_csv(
            locstim_df_infile , index=False
        )
        locstim_list = locstim_df_infile
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to an experiment by the ... Lab!

        This experiment is meant to be run in full-screen mode. DO NOT escape out of the full-screen. Otherwise you will have to restart the entire experiment from the beginning.


        Press <SPACE> to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Encode
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    ImageComponent encode_img
      image [set every repeat] = $img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine ITI
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    PolygonComponent ITI_fixation
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter
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  Routine Trial_prepare
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    TextComponent Trial_prepare_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $f"The trial will begin in {5 - t:.0f} s."
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  Routine Rest
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    TextComponent rest_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $f"Rest!\n\nGreat job completing the run! You have completed {run_num} out of 3 runs. You may now take a {30 - t:.0f} second break!"
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    KeyboardComponent rest_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20
      stopVal [time (s)] = 30
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    TextComponent rest_continue_text
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 20
      stopVal [time (s)] = 30
      text = Press <SPACE> if you would like to end the break early!
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Flow
  Routine Welcome
  Routine Trial_prepare
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $locstim_list
    loopType = sequential
    nReps = 1
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    Routine Encode
    Routine ITI
    LoopInitiator rest_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = rest_trigger
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      Routine Rest
      Routine Trial_prepare
    LoopTerminator rest_loop
  LoopTerminator trials
