PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'phase': 'maintask'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['instructions/probe_instructions.png', 'instructions/probe_screen_instructions.png', 'instructions/operation_instructions.png', 'instructions/oper_screen_instructions.png', 'instructions/encode_instructions.png', 'stimuli/csvs/maintask_stimlists/prac_stim_list.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_9.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_8.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_7.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_6.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_5.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_4.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_3.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_2.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_1.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_0.csv', 'stimuli/images/faces/zoe_saldana.png', 'stimuli/images/faces/willie_nelson.png', 'stimuli/images/faces/wendy_davis.png', 'stimuli/images/faces/vin_diesel.png', 'stimuli/images/faces/venus_williams.png', 'stimuli/images/faces/usher.png', 'stimuli/images/faces/tom_hiddleston.png', 'stimuli/images/faces/tom_brady.png', 'stimuli/images/faces/tim_tebow.png', 'stimuli/images/faces/ted_cruz.png', 'stimuli/images/faces/taylor_swift.png', 'stimuli/images/faces/shaun_white.png', 'stimuli/images/faces/seth_rogan.png', 'stimuli/images/faces/serena_williams.png', 'stimuli/images/faces/selena_gomez.png', 'stimuli/images/faces/scarlett_johansson.png', 'stimuli/images/faces/sarah_palin.png', 'stimuli/images/faces/sandra_bullock.png', 'stimuli/images/faces/ryan_reynolds.png', 'stimuli/images/faces/ronda_rousey.png', 'stimuli/images/faces/rihanna.png', 'stimuli/images/faces/rand_paul.png', 'stimuli/images/faces/queen_elizabeth_with_crown.png', 'stimuli/images/faces/peyton_manning.png', 'stimuli/images/faces/penelope_cruz.png', 'stimuli/images/faces/paul_ryan.png', 'stimuli/images/faces/olivia_wilde.png', 'stimuli/images/faces/nicki_minaj.png', 'stimuli/images/faces/morgan_freeman.png', 'stimuli/images/faces/miranda_lambert.png', 'stimuli/images/faces/mila_kunis.png', 'stimuli/images/faces/michelle_obama.png', 'stimuli/images/faces/michele_bachmann.png', 'stimuli/images/faces/michael_phelps.png', 'stimuli/images/faces/michael_jordan.png', 'stimuli/images/faces/mia_hamm.png', 'stimuli/images/faces/martin_omalley.png', 'stimuli/images/faces/maria_sharapova.png', 'stimuli/images/faces/marco_rubio.png', 'stimuli/images/faces/madonna.png', 'stimuli/images/faces/macklemore.png', 'stimuli/images/faces/lucy_liu.png', 'stimuli/images/faces/lindsey_vonn.png', 'stimuli/images/faces/leonardo_dicaprio.png', 'stimuli/images/faces/lebron.png', 'stimuli/images/faces/lance_armstrong.png', 'stimuli/images/faces/kobe_bryant.png', 'stimuli/images/faces/keith_urban.png', 'stimuli/images/faces/katy_perry.png', 'stimuli/images/faces/justin_bieber.png', 'stimuli/images/faces/john_mcain.png', 'stimuli/images/faces/john_mayer.png', 'stimuli/images/faces/john_kerry.png', 'stimuli/images/faces/joe_biden.png', 'stimuli/images/faces/jj_watt.png', 'stimuli/images/faces/jennifer_aniston.png', 'stimuli/images/faces/jeb_bush.png', 'stimuli/images/faces/jay_z.png', 'stimuli/images/faces/jason_statham.png', 'stimuli/images/faces/hope_solo.png', 'stimuli/images/faces/hillary_clinton.png', 'stimuli/images/faces/gwen_stefani.png', 'stimuli/images/faces/gerard_butler.png', 'stimuli/images/faces/george_clooney.png', 'stimuli/images/faces/george_bush.png', 'stimuli/images/faces/gabby_douglas.png', 'stimuli/images/faces/emma_stone.png', 'stimuli/images/faces/drake.png', 'stimuli/images/faces/david_beckham.png', 'stimuli/images/faces/danica_patrick.png', 'stimuli/images/faces/condoleezza_rice.png', 'stimuli/images/faces/christian_bale.png', 'stimuli/images/faces/chris_pratt.png', 'stimuli/images/faces/chris_hemsworth.png', 'stimuli/images/faces/chris_christie.png', 'stimuli/images/faces/carrie_underwood.png', 'stimuli/images/faces/carly_fiorina.png', 'stimuli/images/faces/bruno_mars.png', 'stimuli/images/faces/britney_spears.png', 'stimuli/images/faces/brad_pitt.png', 'stimuli/images/faces/blake_shelton.png', 'stimuli/images/faces/blake_lively.png', 'stimuli/images/faces/bill_clinton.png', 'stimuli/images/faces/beyonce_knowles.png', 'stimuli/images/faces/bernie_sanders.png', 'stimuli/images/faces/ben_carson.png', 'stimuli/images/faces/barack_obama.png', 'stimuli/images/faces/ariana_grande.png', 'stimuli/images/faces/anne_hathaway.png', 'stimuli/images/faces/angela_merkel.png', 'stimuli/images/faces/amanda_seyfried.png', 'stimuli/images/faces/alex_rodriguez.png', 'stimuli/images/faces/alex_morgan.png', 'stimuli/images/faces/adele.png', 'stimuli/images/faces/adam_levine.png', 'stimuli/images/faces/abby_wambach.png', 'stimuli/images/faces/aaron_rodgers.png', 'stimuli/images/fruits/yellow_apple.png', 'stimuli/images/fruits/whole_pears.png', 'stimuli/images/fruits/whole_pear02.png', 'stimuli/images/fruits/whole_cantaloupe.png', 'stimuli/images/fruits/watermelon.png', 'stimuli/images/fruits/sliced_watermelon05.png', 'stimuli/images/fruits/sliced_watermelon04.png', 'stimuli/images/fruits/sliced_watermelon03.png', 'stimuli/images/fruits/sliced_watermelon02.png', 'stimuli/images/fruits/sliced_watermelon.png', 'stimuli/images/fruits/sliced_pears02.png', 'stimuli/images/fruits/sliced_pears.png', 'stimuli/images/fruits/sliced_honeydew02.png', 'stimuli/images/fruits/sliced_honeydew.png', 'stimuli/images/fruits/sliced_fuji.png', 'stimuli/images/fruits/red_grapes07.png', 'stimuli/images/fruits/red_grapes06.png', 'stimuli/images/fruits/red_grapes05.png', 'stimuli/images/fruits/red_grapes04.png', 'stimuli/images/fruits/red_grapes03.png', 'stimuli/images/fruits/red_grapes02.png', 'stimuli/images/fruits/red_grapes.png', 'stimuli/images/fruits/red_delicious.png', 'stimuli/images/fruits/pink_lady.png', 'stimuli/images/fruits/pear06.png', 'stimuli/images/fruits/pear05.png', 'stimuli/images/fruits/pear04.png', 'stimuli/images/fruits/pear03.png', 'stimuli/images/fruits/pear02.png', 'stimuli/images/fruits/pear01.png', 'stimuli/images/fruits/pear.png', 'stimuli/images/fruits/orange_pear.png', 'stimuli/images/fruits/muskmelon02.png', 'stimuli/images/fruits/muskmelon.png', 'stimuli/images/fruits/mixed_grapes05.png', 'stimuli/images/fruits/mixed_grapes04.png', 'stimuli/images/fruits/mixed_grapes03.png', 'stimuli/images/fruits/mixed_grapes02.png', 'stimuli/images/fruits/mixed_grapes.png', 'stimuli/images/fruits/leaning_pears03.png', 'stimuli/images/fruits/leaning_pears02.png', 'stimuli/images/fruits/leaning_pears.png', 'stimuli/images/fruits/lavaredo.png', 'stimuli/images/fruits/kiku_slice.png', 'stimuli/images/fruits/honeydew_melon02.png', 'stimuli/images/fruits/honeydew_melon.png', 'stimuli/images/fruits/honeydew_half.png', 'stimuli/images/fruits/honeydew.png', 'stimuli/images/fruits/honeycrisp_apple.png', 'stimuli/images/fruits/halved_watermelon02.png', 'stimuli/images/fruits/halved_watermelon.png', 'stimuli/images/fruits/half_apple.png', 'stimuli/images/fruits/green_pear.png', 'stimuli/images/fruits/green_grapes06.png', 'stimuli/images/fruits/green_grapes05.png', 'stimuli/images/fruits/green_grapes04.png', 'stimuli/images/fruits/green_grapes03.png', 'stimuli/images/fruits/green_grapes02.png', 'stimuli/images/fruits/green_grapes.png', 'stimuli/images/fruits/granny_smith_apples.png', 'stimuli/images/fruits/golden_apple.png', 'stimuli/images/fruits/gala_apple_leaf.png', 'stimuli/images/fruits/gala_apple.png', 'stimuli/images/fruits/fresh_red_apple.png', 'stimuli/images/fruits/fresh_pear03.png', 'stimuli/images/fruits/fresh_pear.png', 'stimuli/images/fruits/fresh_fuji.png', 'stimuli/images/fruits/finger_grapes.png', 'stimuli/images/fruits/cut_pears05.png', 'stimuli/images/fruits/cut_pears04.png', 'stimuli/images/fruits/cut_pears03.png', 'stimuli/images/fruits/cut_pears02.png', 'stimuli/images/fruits/cut_pears.png', 'stimuli/images/fruits/cut_cantaloupe.png', 'stimuli/images/fruits/casaba_melon.png', 'stimuli/images/fruits/canteloupe_sliced04.png', 'stimuli/images/fruits/cantaloupe_sliced03.png', 'stimuli/images/fruits/cantaloupe_sliced.png', 'stimuli/images/fruits/cantaloupe02.png', 'stimuli/images/fruits/cantaloupe.png', 'stimuli/images/fruits/bosc_pear.png', 'stimuli/images/fruits/black_grapes05.png', 'stimuli/images/fruits/black_grapes04.png', 'stimuli/images/fruits/black_grapes03.png', 'stimuli/images/fruits/black_grapes02.png', 'stimuli/images/fruits/black_grapes.png', 'stimuli/images/fruits/apple_slice2.png', 'stimuli/images/fruits/apple_green.png', 'stimuli/images/fruits/apple07.png', 'stimuli/images/fruits/apple06.png', 'stimuli/images/fruits/apple05b.png', 'stimuli/images/fruits/apple05a.png', 'stimuli/images/fruits/apple04.png', 'stimuli/images/fruits/apple03c.png', 'stimuli/images/fruits/apple03b.png', 'stimuli/images/fruits/apple03a.png', 'stimuli/images/fruits/apple01 2.png', 'stimuli/images/places/yellow_sand_kauai.png', 'stimuli/images/places/yellow_sand_beach.png', 'stimuli/images/places/white_sand_beach.png', 'stimuli/images/places/unique_mountains.png', 'stimuli/images/places/tree_beach.png', 'stimuli/images/places/tower_bridge.png', 'stimuli/images/places/texas_beach.png', 'stimuli/images/places/taj_mahal.png', 'stimuli/images/places/sydney_bridge.png', 'stimuli/images/places/swedish_bridge.png', 'stimuli/images/places/supreme_court.png', 'stimuli/images/places/sunset_beach.png', 'stimuli/images/places/stbasils.png', 'stimuli/images/places/space_needle.png', 'stimuli/images/places/skyway_bridge.png', 'stimuli/images/places/sioseh_bridge.png', 'stimuli/images/places/shell_beach.png', 'stimuli/images/places/sandy_beach.png', 'stimuli/images/places/sajama.png', 'stimuli/images/places/sagrada_familia.png', 'stimuli/images/places/royal_albert_hall.png', 'stimuli/images/places/river_bridge.png', 'stimuli/images/places/ripple_beach.png', 'stimuli/images/places/red_sand_beach.png', 'stimuli/images/places/python_bridge.png', 'stimuli/images/places/pont_du_gard.png', 'stimuli/images/places/piza.png', 'stimuli/images/places/pink_sand_beach.png', 'stimuli/images/places/pink_beach.png', 'stimuli/images/places/petronas_towers.png', 'stimuli/images/places/palm_beach.png', 'stimuli/images/places/outer_banks_beach.png', 'stimuli/images/places/natchez_bridge.png', 'stimuli/images/places/mountains1.png', 'stimuli/images/places/mountain_range.png', 'stimuli/images/places/mount_huang.png', 'stimuli/images/places/mount_hood.png', 'stimuli/images/places/mount_fuji.png', 'stimuli/images/places/mount_everest.png', 'stimuli/images/places/millau_bridge.png', 'stimuli/images/places/meijigallery_tokyo.png', 'stimuli/images/places/mediterranean_beach.png', 'stimuli/images/places/matterhorn.png', 'stimuli/images/places/long_bridge.png', 'stimuli/images/places/light_pink_beach.png', 'stimuli/images/places/licancabur.png', 'stimuli/images/places/kilimanjaro.png', 'stimuli/images/places/kailash.png', 'stimuli/images/places/k2.png', 'stimuli/images/places/japanese_castle.png', 'stimuli/images/places/jacques_bridge.png', 'stimuli/images/places/independence_hall.png', 'stimuli/images/places/himalayas.png', 'stimuli/images/places/harvard.png', 'stimuli/images/places/half_dome.png', 'stimuli/images/places/hagia_sophia.png', 'stimuli/images/places/gray_beach.png', 'stimuli/images/places/grand_teton.png', 'stimuli/images/places/golden_gate_bridge.png', 'stimuli/images/places/glass_bridge.png', 'stimuli/images/places/gherkin.png', 'stimuli/images/places/freedom_beach.png', 'stimuli/images/places/forth_bridge.png', 'stimuli/images/places/fort_knox.png', 'stimuli/images/places/flatiron_building.png', 'stimuli/images/places/fitz_roy.png', 'stimuli/images/places/empire_state_building.png', 'stimuli/images/places/eiger.png', 'stimuli/images/places/donghai_bridge.png', 'stimuli/images/places/dome_of_the_rock.png', 'stimuli/images/places/distant_mountains.png', 'stimuli/images/places/denali.png', 'stimuli/images/places/danyang_bridge.png', 'stimuli/images/places/covered_bridge.png', 'stimuli/images/places/costa_rica_mountain.png', 'stimuli/images/places/cn_tower.png', 'stimuli/images/places/cinderella_castle.png', 'stimuli/images/places/chengyang_bridge.png', 'stimuli/images/places/castle.png', 'stimuli/images/places/capitol.png', 'stimuli/images/places/capilano_bridge.png', 'stimuli/images/places/california_beach.png', 'stimuli/images/places/brooklyn_bridge.png', 'stimuli/images/places/black_sand_maui.png', 'stimuli/images/places/black_sand.png', 'stimuli/images/places/black_beach_surf.png', 'stimuli/images/places/black_beach_iceland.png', 'stimuli/images/places/beautiful_beach.png', 'stimuli/images/places/azadi_monument.png', 'stimuli/images/places/aoraki.png', 'stimuli/images/places/alpamayo.png', 'stimuli/images/places/alcantara_bridge.png', 'stimuli/images/places/alamo.png', 'stimuli/images/places/akashi_bridge.png', 'stimuli/images/places/360_bridge.png', 'stimuli/cues/suppress_cue_image.png', 'stimuli/cues/maintain_cue_image.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = remlure_maintask
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Encode
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    PolygonComponent encode_fixation
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent img_1_left
      image [set every repeat] = $encode_1_img
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent img_2_right
      image [set every repeat] = $encode_2_img
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Manipulate
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    CodeComponent cue_position_code
      Code Type = Auto->JS
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      Begin Routine:
        if cue_position == "left":
            cuepos = (-0.3, 0)
        elif cue_position == "right":
            cuepos = (0.3, 0)
        print("cue_position = ", cue_position)
    ImageComponent manipulate_cue
      image [set every repeat] = $replace_img
      pos [set every repeat] = cuepos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent manipulate_fixation
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Probe
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    CodeComponent probe_code
      Code Type = Both
      Begin JS Experiment:
        var keyPressed_probe;
      Begin JS Routine:
        let correct_ans;
        if (["cued", "uncued", "replacement"].includes(probe_subtype)) {
            correct_ans = "f";
        } else {
            correct_ans = "j";
        }
        keyPressed_probe = undefined;
      Begin Routine:
        print("probesubtype = ", probe_subtype)
        print("trial = ", trial_num)

        if probe_subtype in ["cued", "uncued", "replacement"]:
            correct_ans = "f"
        else:
            correct_ans = "j"
      End JS Routine:
        try {
            keyPressed_probe = _probe_keyResp_allKeys[_probe_keyResp_allKeys.length - 1].name;
        } catch (e) {
        }
        console.log(keyPressed_probe)
        if ((keyPressed_probe !== undefined) && (keyPressed_probe === correct_ans)) {
            console.log("correct!");
            corr += 1;
        }
      End Routine:
        try:
            keypressed = _probe_keyResp_allKeys[-1].name
        except IndexError:
            print("index error for keypressed. No key was pressed!")
            keypressed = None
        if keypressed == correct_ans:
            print("correct!")
            corr += 1
    ImageComponent probe_image
      image [set every repeat] = $probe_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent probe_keyResp
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent yesKey_text
      letterHeight = 0.05
      pos = (-0.2, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        [F]
        YES
    TextComponent noKey_text
      letterHeight = 0.05
      pos = (0.2, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        [J]
        NO
  Routine Delay_4000
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    PolygonComponent delay_fixation_4000
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Delay_2000
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    PolygonComponent delay_fixation_2000
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Welcome
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    CodeComponent init_code
      Code Type = Both
      Before Experiment:
        #### LOAD NECESSARY PACKAGES ####
        import random
        import pandas as pd
        import numpy as np
        import os
        from collections import Counter
        import copy
        from itertools import permutations

        # Set participant number
        # need this to create a folder with each subs design matrix
        participant_number = "test"  # Edward, if you put this code in PsychoPy this would need to be changed to refelect the expInfo
        # expInfo['participant']

        # set directory path
        try:
            _thisDir = os.path.dirname(os.path.abspath(__file__))
        except NameError:
            print("__file__ does not exist")
            _thisDir = os.getcwd()

        # create a subject specific folder to save all lists
        list_foldername = os.path.join(_thisDir, "subject lists", f"sub-{participant_number}")

        phase_subFolder = "main_task"

        # Create the subject folder if it doesn't exist
        if not os.path.exists(list_foldername):
            os.makedirs(list_foldername)
            print(f"List folder successfully created for sub-{participant_number}")
        else:
            print(f"List folder already exists for sub-{participant_number}...")

        # Create each phase subfolder within the subject's folder
        phase_folder_path = os.path.join(list_foldername, phase_subFolder)
        # Create the phase folder
        if not os.path.exists(phase_folder_path):
            os.makedirs(phase_folder_path)
            print(f"Created phase folder: {phase_subFolder}")
        else:
            print(f"Phase folder '{phase_subFolder}' already exists...")

        #### SETUP STIMULUS MASTER LISTS ####
        # set a random seed
        random.seed()

        # read in the master stimulus lists
        faces_mainTask_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "faces_mainTask.csv"
        )

        places_mainTask_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "places_mainTask.csv"
        )

        fruits_mainTask_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "fruits_mainTask.csv"
        )

        faces_novel_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "faces_novel.csv"
        )

        places_novel_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "places_novel.csv"
        )

        fruits_novel_list_infile = (
            _thisDir
            + os.sep
            + "stimuli"
            + os.sep
            + "csvs"
            + os.sep
            + "main_task"
            + os.sep
            + "fruits_novel.csv"
        )

        # open stimulus mater files
        faces_mainTask_list = pd.read_csv(faces_mainTask_list_infile, header=None).loc[:,0].tolist()   # 20 count
        places_mainTask_list = pd.read_csv(places_mainTask_list_infile, header=None).loc[:,0].tolist()    # 20 count
        fruits_mainTask_list = pd.read_csv(fruits_mainTask_list_infile, header=None).loc[:,0].tolist()     # 20 count

        faces_novel_list = pd.read_csv(faces_novel_list_infile, header=None).loc[:,0].tolist()    # 77 count
        places_novel_list = pd.read_csv(places_novel_list_infile, header=None).loc[:,0].tolist()    # 75 count
        fruits_novel_list = pd.read_csv(fruits_novel_list_infile, header=None).loc[:,0].tolist()    # 77 count


        #### CREATE MAIN TASK LISTS ####
        # Define some experiment variables
        total_trials = 144    # number of trials
        run_len = 24    # trials per run
        num_runs = 6    # number of runs
        num_oper_per_run = run_len // 3    # 3 operations

        ## Create conditions structure
        # Define the experiment conditions
        cue_pos = ["left", "right"]
        operations = ["maintain", "suppress", "replace"]
        categories = ["faces", "places", "fruits"]
        probe_types = range(4)

        # Create the conditions list
        conditions = [[(cat1, cat2, oper, probe)
                       for cat1, cat2 in permutations(categories, 2)
                       ]
                      for oper in operations
                      for probe in probe_types]
        conditions = np.array(conditions)     # shape=(12, 6, 4)

        # concatenate within operation to create 3 arrays of 24 (shape=[3, 24, 4])
        combined_conds = np.array([np.vstack(conditions[:4]),
                                   np.vstack(conditions[4:8]),
                                   np.vstack(conditions[8:12])
                                   ])

        # Create indices for the three conditions
        cond_inds = np.full((len(operations), run_len), np.nan)
        for i in range(run_len):
            cond_inds[:, i] = np.roll(np.arange(3), (i % 3) + i // 3)
        # Randomly roll to create unique structure
        cond_inds = np.roll(cond_inds, np.random.randint(24), axis=1)
        # Use boolean indexing to separate out the three runs
        run_1_conds = combined_conds[cond_inds == 0]
        run_2_conds = combined_conds[cond_inds == 1]
        run_3_conds = combined_conds[cond_inds == 2]

        # Run assertion checks to make sure that list creation ran properly
        for run, conds in enumerate([run_1_conds, run_2_conds, run_3_conds]):
            # Check the categories
            c = Counter([(r[0], r[1]) for r in conds])
            # print(c)
            assert all([cat in c.keys() for cat in permutations(categories, 2)]), \
                "list creation failed to include all category pairs"
            assert all([v == run_len // len(list(permutations(categories, 2))) for v in c.values()]), \
                f"list creation failed to properly balance category pairs within run {run + 1}"
            # Check the operations
            c = Counter(conds[:, 2])
            # print(c)
            assert all([op in c.keys() for op in operations]), \
                "list creation failed to include all operations"
            assert all([v == run_len // len(operations) for v in c.values()]), \
                f"list creation failed to properly balance operations within run {run + 1}"

        # Initialize the column order
        column_order = ["encode_1_cat", "encode_2_cat", "operation", "probe_type"]
        # Randomly permute the three runs for the first half and save into a dataframe
        conditions_df = pd.DataFrame(np.random.permutation([run_1_conds,
                                                          run_2_conds,
                                                          run_3_conds]).reshape((total_trials // 2, -1)),
                                   columns=column_order)

        # Add list of cue_position
        cuepos_arr = np.concatenate((np.zeros(len(conditions_df) // 2, dtype=int),
                                     np.ones(len(conditions_df) // 2, dtype=int)))
        # Randomize cue positions
        conditions_df["cue_position"] = np.random.permutation(cuepos_arr)
        # Create the conditions for the second half
        secondhalf_conditions = conditions_df.copy()
        # Flip the cue positions for the second half
        secondhalf_conditions["cue_position"] = 1 - secondhalf_conditions["cue_position"]
        # Randomize the run structure again in second half and append to ongoing dataframe
        for i in np.random.permutation(np.arange(3)):
            conditions_df = pd.concat((conditions_df, secondhalf_conditions.iloc[24*i : 24*(i+1)]),
                                      ignore_index=True)

        # Add run_num
        conditions_df["run_num"] = [n + 1 for n in range(num_runs) for i in range(run_len)]


        ## Pseudorandomize trials within runs and append to mainTask dataframe
        # initialize mainTask df
        mainTask_df = pd.DataFrame()

        # this code is to make sure there are no more than 3 of the same operation repeated in a row
        for i in range(1, num_runs+1):
            # subselect the run dataframe
            run_df = conditions_df[conditions_df["run_num"] == i]
            wm_valid_sequence = False
            while not wm_valid_sequence:
                # resample the trials within this run
                run_df = run_df.sample(frac=1).reset_index(drop=True)
                # check the operation structures
                wm_valid_sequence = not any((run_df['operation'] == run_df['operation'].shift(1)) &
                                            (run_df['operation'] == run_df['operation'].shift(2)) &
                                            (run_df['operation'] == run_df['operation'].shift(3)))
            # Concat the now shuffled run into the main task dataframe
            mainTask_df = pd.concat((mainTask_df, run_df), ignore_index=True)


        ## recode the conditions into variable names used in PsychoPy
        # recode cue_position
        mainTask_df["cue_position"] = ["right" if cp else "left" for cp in mainTask_df.cue_position]

        # Convert the probe_type to int type
        mainTask_df["probe_type"] = mainTask_df["probe_type"].astype(int)
        # set probe sub-type
        maintain_probes = ["cued", "uncued", "novel", "novel"]
        replace_probes = ["lure", "replacement", "uncued", "novel"]
        suppress_probes = ["lure", "uncued", "uncued", "novel"]
        probe_subtype = []
        for i, r in mainTask_df.iterrows():
            if r.operation == "maintain":
                probe_subtype.append(maintain_probes[r.probe_type])
            elif r.operation == "suppress":
                probe_subtype.append(suppress_probes[r.probe_type])
            elif r.operation == "replace":
                probe_subtype.append(replace_probes[r.probe_type])
        mainTask_df["probe_subtype"] = probe_subtype

        # set replacement category
        def find_replace_cat(row):
            if row["operation"] == "replace":
                present = {row["encode_1_cat"], row["encode_2_cat"]}
                missing = set(categories) - present
                return missing.pop() if missing else "NA"
            else:
                return "NA"
        mainTask_df["replace_cat"] = mainTask_df.apply(find_replace_cat, axis=1)

        # set trial num
        mainTask_trial_num = list(range(1, 25)) * 6
        mainTask_df["trial_num"] = mainTask_trial_num

        # Add jitter, randomized within run
        jitter = []
        for i in range(num_runs):
            jitter += np.random.permutation([3, 4, 5] * int(run_len / 3)).tolist()
        mainTask_df["jitter"] = jitter

        # Add rest trigger
        mainTask_df["rest_trigger"] = [int(r.trial_num == run_len) if i != (total_trials - 1) else 0 for i, r in mainTask_df.iterrows()]

        ## Select stims for each trial
        def select_stim(probecounter, crs_list, stimsdict, useprobe=True,
                        oper=None, cuestatus=None, imgcat=None, reverse=False,):
            # Iterate through the sorted stim list (sorted by number of times used as probe)
            # initiate a counter for the entire stimsdict
            counter = Counter()
            for o in stimsdict:
                for p in stimsdict[o]:
                    for c in stimsdict[o][p]:
                        counter.update(stimsdict[o][p][c])
            # subselect viable list (stim in current condition dict) then sort from most common to least commonly used
            viable_list = [sv for sv in counter.most_common() if sv[0] in stimsdict[oper][cuestatus][imgcat]]
            # iterate from least common to most common
            for value in np.unique([v for _, v in viable_list]):
                # Subselect stims matching the used-value
                stims = [s[0] for s in viable_list if s[1] == value]
                if useprobe:
                    # Sort stims based on number of times probed
                    sortedstims = [k for k in sorted(probecounter.items(), key=lambda x:x[1]) if k[0] in stims]
                    if reverse:
                        sortedstims.reverse()
                else:
                    sortedstims = np.random.permutation(stims)
                # iterate and pull stim
                if useprobe:
                    for val in np.unique([k[1] for k in sortedstims]):
                        substims = np.random.permutation([k[0] for k in sortedstims if k[1] == val])
                        for s in substims:
                            if s not in crs_list:
                                stimsdict[oper][cuestatus][imgcat].remove(s)    # remove stim from stims dict
                                crs_list.append(s)  # add stim to current run stims
                                return s
                else:
                    for s in sortedstims:
                        # find if sim is in current category and if stim has been used in current run
                        if s not in crs_list:
                            stimsdict[oper][cuestatus][imgcat].remove(s)    # remove stim from stims dict
                            crs_list.append(s)    # add stim to current run stims
                            return s
            # print("No stimuli selected")
            return None

        def check_trials(imglist: list, numtrials: int):
            """
            checks a list of dictionaries to ensure that all the necesssary imgs have been selected for each trial in numtrials
            """
            return len([i["left"] for i in imglist if i["left"] is not None]) == numtrials and \
                len([i["right"] for i in imglist if i["right"] is not None]) == numtrials and \
                len([i["replacement"] for i in imglist if i["replacement"] is not None]) == numtrials and \
                len([i["probe"] for i in imglist if i["probe"] is not None]) == numtrials


        # initiate a list to store the stims
        check = False
        retries = 0
        # Set the operation cue images
        opcue_dict = {"maintain": "stimuli/cues/maintain_cue_image.png",
                      "suppress": "stimuli/cues/suppress_cue_image.png",}
        # Build the lists
        while not check:
            # Assign stim to trials
            stims_dict = {}
            # create dictionary for each operation, cue-type and img category 3*2*3*19 = 342
            for oper in ["maintain", "suppress", "replace"]:
                stims_dict[oper] = {}
                for probe in ["cued", "uncued", "replacement"]:
                    if oper != "replace" and probe == "replacement":    # only create replacement category for replace trials
                        continue
                    stims_dict[oper][probe] = {"faces": np.random.permutation(faces_mainTask_list).tolist(),
                                               "places": np.random.permutation(places_mainTask_list).tolist(),
                                               "fruits": np.random.permutation(fruits_mainTask_list).tolist(), }
            # Save novel stims into dict
            novel_stims_dict = {"faces": np.random.permutation(faces_novel_list).tolist(),
                                "places": np.random.permutation(places_novel_list).tolist(),
                                "fruits": np.random.permutation(fruits_novel_list).tolist(), }
            # initiate counter
            timesprobed_counter = Counter(faces_mainTask_list + places_mainTask_list + fruits_mainTask_list)
            # reset the counter to 0
            for entry in timesprobed_counter:
                timesprobed_counter[entry] = 0
            # initiate the image list
            image_list = []
            # Perform the build chunked by run
            for run in range(1, num_runs + 1):
                df = mainTask_df[mainTask_df["run_num"] == run]
                # Loop until run has completed building
                run_check = False
                t = 0
                # Try to use probe as much as possible
                # print("now using probe counter")
                useprobe = True
                while not run_check:
                    random.seed()
                    # initiate a run specific image list
                    run_image_list = []
                    # Initiate list to keep track of images in current run
                    current_run_stims = []
                    # Create copies of the master tracking lists
                    run_timesprobed_counter = copy.deepcopy(timesprobed_counter)
                    run_stims_dict = copy.deepcopy(stims_dict)
                    run_novel_stims_dict = copy.deepcopy(novel_stims_dict)
                    for i, r in df.iterrows():
                        # Determine the image to be probed
                        if r.probe_subtype == "cued" or r.probe_subtype == "lure":
                            probe_pos = r.cue_position
                        elif r.probe_subtype == "uncued":
                            probe_pos = "left" if r.cue_position == "right" else "right"
                        elif r.probe_subtype == "replacement":
                            probe_pos = "replacement"
                        else:
                            probe_pos = None
                        # Find an image for each position
                        images_dict = {}
                        for imgnum in ["left", "right", "replacement"]:
                            # determine the image category
                            if imgnum == "left":
                                imgcat = r.encode_1_cat
                            elif imgnum == "right":
                                imgcat = r.encode_2_cat
                            elif imgnum == "replacement":
                                if r.operation != "replace":
                                    images_dict["replacement"] = opcue_dict[r.operation]
                                    continue
                                else:
                                    imgcat = r.replace_cat
                            # determine cue status for image
                            cue_status = "replacement" if imgnum == "replacement" else ("uncued", "cued")[r.cue_position == imgnum]
                            # select the image
                            # Create sorted lists of stims based on number of times probed
                            if imgnum == probe_pos:
                                img = select_stim(run_timesprobed_counter, current_run_stims, run_stims_dict, useprobe=useprobe,
                                                  oper=r.operation, cuestatus=cue_status, imgcat=imgcat, reverse=False)
                            else:
                                img = select_stim(run_timesprobed_counter, current_run_stims, run_stims_dict, useprobe=useprobe,
                                                  oper=r.operation, cuestatus=cue_status, imgcat=imgcat, reverse=True)
                            # Save the image into the dict
                            images_dict[imgnum] = img
                        # Select a probe image
                        if probe_pos is not None:
                            probe_img = images_dict[probe_pos]
                            # Update the run timesprobed counter
                            run_timesprobed_counter[probe_img] += 1
                        else:
                            probe_cat = np.random.choice([r.encode_1_cat, r.encode_2_cat])
                            probe_img = run_novel_stims_dict[probe_cat].pop()
                        # Save the probe image
                        images_dict["probe"] = probe_img
                        # Save the image dict into the run image list
                        run_image_list.append(images_dict)

                    # Perform a check for the run
                    run_check = check_trials(run_image_list, run_len)
                    # print("run = ", run)
                    # print("runcheck = ", run_check)
                    t += 1
                    if t > 5:
                        # print("now turning useprobe to False")
                        useprobe = False
                    if t > 10:
                        break
                # If run passes check, overwrite all ongoing saves onto counters/lists
                image_list += run_image_list
                timesprobed_counter = run_timesprobed_counter
                stims_dict = run_stims_dict
                novel_stims_dict = run_novel_stims_dict
            if len(image_list) == total_trials:
                print("completed build, now checking...")
                check = check_trials(image_list, total_trials)
            else:
                print(len(image_list))
                print("DNF, restarting...")
                continue
            retries += 1
            if retries > 20:
                break
        if retries > 20:
            # Use a premade stim list
            premade_infile = f"stimuli/csvs/maintask_stimlists/main_stim_list_{random.randint(0,9)}.csv"
            print(f"using pre-made stim list {os.path.split(premade_infile)[1]}")
            mainTask_df = pd.read_csv(premade_infile)
        else:
            # Add stims to df
            mainTask_df["encode_1_img"] = [i["left"] for i in image_list]
            mainTask_df["encode_2_img"] = [i["right"] for i in image_list]
            mainTask_df["replace_img"] = [i["replacement"] for i in image_list]
            mainTask_df["probe_img"] = [i["probe"] for i in image_list]

        mainTask_df_infile = f"{list_foldername}/main_task/main_stim_list.csv"
        # Save to maintask folder
        mainTask_df.to_csv(
            mainTask_df_infile , index=False
        )
        stim_list = mainTask_df_infile
      Before JS Experiment:
        var set_num, stim_list;

        set_num = Math.floor(Math.random() * 10).toString();

        stim_list = 'stimuli/csvs/maintask_stimlists/main_stim_list_' + set_num + '.csv';
      Begin JS Routine:
        psychoJS.experiment.addData("stim_set", set_num);
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to an experiment by the ... Lab!

        This experiment is meant to be run in full-screen mode. DO NOT escape out of the full-screen. Otherwise you will have to restart the entire experiment from the beginning.


        Press <SPACE> to continue
    KeyboardComponent welcome_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Manipulate_Instruct
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  Routine ITI
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    PolygonComponent ITI_fixation
      disabled = True
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter
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    TextComponent ITI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter
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  Routine Rest
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    TextComponent rest_exclaim_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Rest!
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    TextComponent rest_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $f"Great job completing the run! You have completed {run_num} out of 6 runs. You may now take a {30 - t:.0f} second break!"
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    KeyboardComponent rest_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20
      stopVal [time (s)] = 30
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    TextComponent rest_continue_text
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 20
      stopVal [time (s)] = 30
      text = Press <SPACE> if you would like to end the break early!
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  Routine Trial_prepare
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    TextComponent Trial_prepare_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $f"The trial will begin in {5 - t:.0f} s."
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  Routine Encode_instruct
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    ImageComponent encode_instruct_img
      image = instructions/encode_instructions.png
      pos = (0, -0.075)
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent encode_instruct_cont_text
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent encode_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Oper_screen_instruct
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    ImageComponent operscreen_instruct_img
      image = instructions/oper_screen_instructions.png
      pos = (0, -0.075)
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent operscreen_instruct_cont_text
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent operscreen_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Operations_instruct
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    ImageComponent operations_instruct_img
      image = instructions/operation_instructions.png
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent operations_instruct_conttext
      letterHeight = 0.04
      pos = (0, -0.43)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent operations_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Probe_screen_instruct
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    ImageComponent probescreen_instruct_img
      image = instructions/probe_screen_instructions.png
      size = (1.47, 0.95)
      startVal [time (s)] = 0.0
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    TextComponent probescreen_instruct_conttext
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent probescreen_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Probe_instruct
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    ImageComponent probe_instructions_img
      image = instructions/probe_instructions.png
      size = (1.47, 0.9)
      startVal [time (s)] = 0.0
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    TextComponent probe_instructions_conttext
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent probe_instructions_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main_exp_begin
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    TextComponent mainexp_begin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The main experiment is about to begin.



        Press <ENTER> to continue.
    KeyboardComponent main_exp_begin
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Debrief
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    TextComponent debrief_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        In the experiment, you were asked to encode two items on each trial. You were then cued to manipulate one of the items in your working memory by either maintaining it, suppressing it, or replacing it. We then probed your memory of one item's position. The aim of this study is to test if semantic activation reduces your ability to suppress the individual items in that list. The results of this study will improve our understanding of when people are good at controlling their thoughts and when they are not, which in its extreme could result in symptoms of psychological disorders such as rumination and thought intrusions.

        Your participation is greatly appreciated! If you have any questions, please feel free to email me at {edjoeleung@utexas.edu}. THANK YOU!!
  Routine Practice_begin
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    TextComponent prac_begin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's do a couple of practice trials!



        Press <RETURN> to continue.
    KeyboardComponent prac_begin_keyResp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent corrinit_code
      Code Type = Auto->JS
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      Begin Experiment:
        corr = 0
      Begin Routine:
        corr = 0
  Routine Practice_end
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    TextComponent practice_continue_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"That is the end of the practice! Your accuracy was " + str(corr) + "/6.\n\nPress <SPACE> to continue!"
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    KeyboardComponent pracend_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Encode_instruct
  Routine Oper_screen_instruct
  Routine Operations_instruct
  Routine Probe_screen_instruct
  Routine Probe_instruct
  Routine Practice_begin
  Routine Trial_prepare
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = stimuli/csvs/maintask_stimlists/prac_stim_list.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'maintain'), ('replace_cat', None), ('cue_position', 'left'), ('trial_num', 'prac_1'), ('probe_subtype', 'cued'), ('run_num', 'practice'), ('jitter', 3), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/michael_phelps.png'), ('encode_2_img', 'stimuli/images/places/river_bridge.png'), ('replace_img', 'stimuli/cues/maintain_cue_image.png'), ('probe_img', 'stimuli/images/faces/michael_phelps.png')]),
      OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'fruits'), ('operation', 'maintain'), ('replace_cat', None), ('cue_position', 'left'), ('trial_num', 'prac_2'), ('probe_subtype', 'novel'), ('run_num', 'practice'), ('jitter', 4), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/sandra_bullock.png'), ('encode_2_img', 'stimuli/images/fruits/fresh_red_apple.png'), ('replace_img', 'stimuli/cues/maintain_cue_image.png'), ('probe_img', 'stimuli/images/fruits/pear04.png')]),
      OrderedDict([('encode_1_cat', 'places'), ('encode_2_cat', 'fruits'), ('operation', 'suppress'), ('replace_cat', None), ('cue_position', 'right'), ('trial_num', 'prac_3'), ('probe_subtype', 'uncued'), ('run_num', 'practice'), ('jitter', 3), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/places/pink_sand_beach.png'), ('encode_2_img', 'stimuli/images/fruits/muskmelon02.png'), ('replace_img', 'stimuli/cues/suppress_cue_image.png'), ('probe_img', 'stimuli/images/places/pink_sand_beach.png')]),
      OrderedDict([('encode_1_cat', 'fruits'), ('encode_2_cat', 'faces'), ('operation', 'suppress'), ('replace_cat', None), ('cue_position', 'right'), ('trial_num', 'prac_4'), ('probe_subtype', 'lure'), ('run_num', 'practice'), ('jitter', 5), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/fruits/honeydew.png'), ('encode_2_img', 'stimuli/images/faces/maria_sharapova.png'), ('replace_img', 'stimuli/cues/suppress_cue_image.png'), ('probe_img', 'stimuli/images/faces/maria_sharapova.png')])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
    Routine Encode
    Routine Delay_2000
    Routine Manipulate
    Routine Delay_4000
    Routine Probe
    Routine ITI
  LoopTerminator prac_trials
  Routine Practice_end
  Routine Main_exp_begin
  Routine Trial_prepare
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $stim_list
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'maintain'), ('replace_cat', None), ('cue_position', 'left'), ('trial_num', 1), ('probe_subtype', 'cued'), ('run_num', 1), ('jitter', 4), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/lebron.png'), ('encode_2_img', 'stimuli/images/places/cinderella_castle.png'), ('replace_img', 'stimuli/cues/maintain_cue_image.png'), ('probe_img', 'stimuli/images/faces/lebron.png')]),
      OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'maintain'), ('replace_cat', None), ('cue_position', 'right'), ('trial_num', 2), ('probe_subtype', 'cued'), ('run_num', 1), ('jitter', 4), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/aaron_rodgers.png'), ('encode_2_img', 'stimuli/images/places/flatiron_building.png'), ('replace_img', 'stimuli/cues/maintain_cue_image.png'), ('probe_img', 'stimuli/images/places/flatiron_building.png')]),
      OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'suppress'), ('replace_cat', None), ('cue_position', 'left'), ('trial_num', 3), ('probe_subtype', 'uncued'), ('run_num', 1), ('jitter', 3), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/scarlett_johansson.png'), ('encode_2_img', 'stimuli/images/places/unique_mountains.png'), ('replace_img', 'stimuli/cues/suppress_cue_image.png'), ('probe_img', 'stimuli/images/places/unique_mountains.png')]),
      OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'places'), ('operation', 'suppress'), ('replace_cat', None), ('cue_position', 'right'), ('trial_num', 4), ('probe_subtype', 'lure'), ('run_num', 1), ('jitter', 4), ('rest_trigger', 0), ('encode_1_img', 'stimuli/images/faces/macklemore.png'), ('encode_2_img', 'stimuli/images/places/skyway_bridge.png'), ('replace_img', 'stimuli/cues/suppress_cue_image.png'), ('probe_img', 'stimuli/images/places/skyway_bridge.png')])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
    Routine Encode
    Routine Delay_2000
    Routine Manipulate
    Routine Delay_4000
    Routine Probe
    Routine ITI
    LoopInitiator rest_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = rest_trigger
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      Routine Rest
      Routine Trial_prepare
    LoopTerminator rest_loop
  LoopTerminator trials
  Routine Debrief
